<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Harp.OutputExpander;assembly=Harp.OutputExpander"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Hardware</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>Commands</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COMx</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="Annotation">
              <Text><![CDATA[Disable pulse mode on all output channels]]></Text>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateOutputPulsePayload">
                <p1:OutputPulse>None</p1:OutputPulse>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="p1:Parse">
              <harp:Register xsi:type="p1:TimestampedAuxInState" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="BitwiseAnd">
              <Operand xsi:type="WorkflowProperty" TypeArguments="p1:AuxiliaryInputs">
                <Value>Aux0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1,Item2.Seconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>PokeState</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
              <rx:Name>EndValveState</rx:Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateOutputSetPayload">
                <p1:OutputSet>Out6</p1:OutputSet>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateOutputClearPayload">
                <p1:OutputClear>Out6</p1:OutputClear>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(sys:Int32,sys:Boolean)">
              <rx:Name>OdorValveState</rx:Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>GeneratePokeMask</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Odor0</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="p1:CreateOutputSetPayload,p1:DigitalOutputs">
                    <MemberName>OutputSet</MemberName>
                    <Value>Out7</Value>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Odor1</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="p1:CreateOutputSetPayload,p1:DigitalOutputs">
                    <MemberName>OutputSet</MemberName>
                    <Value>Out7</Value>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Odor2</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>2</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="p1:CreateOutputSetPayload,p1:DigitalOutputs">
                    <MemberName>OutputSet</MemberName>
                    <Value>Out7</Value>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="p1:CreateOutputSetPayload,p1:DigitalOutputs">
                    <MemberName>OutputSet</MemberName>
                    <Value>None</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="8" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="8" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="8" Label="Source3" />
                  <Edge From="7" To="8" Label="Source4" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>Set</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="p1:Format">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Register xsi:type="p1:OutputSet" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>Clear</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="p1:Format">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Register xsi:type="p1:OutputClear" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="8" To="13" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="17" To="20" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="23" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source2" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="25" To="27" Label="Source1" />
            <Edge From="26" To="28" Label="Source1" />
            <Edge From="27" To="28" Label="Source2" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="28" To="32" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="35" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source2" />
            <Edge From="35" To="36" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Settings</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="MinimumOdorDuration" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="TimeSpanProperty">
                <Value>PT0.1S</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>MinOdorDuration</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="RefractoryOdorDelivery" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="TimeSpanProperty">
                <Value>PT0.01S</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RefactoryOdorDuration</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="MinimumPokeDuration" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="TimeSpanProperty">
                <Value>PT0.2S</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>MinPokeDuration</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>PokeState</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>Throttle</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MinPokeDuration</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Switch" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>IsEntry?</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>WaitMinimum</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>MinOdorDuration</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.1S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PokeState</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="rx:Condition">
              <Name>IsExit?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="8" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>WaitRefractoryPeriod</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RefactoryOdorDuration</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.2S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>UpdateState</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>CurrentOdor</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it &gt; 3 ? 1 : it</scr:Expression>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CurrentOdor</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>CurrentOdor</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>